<?xml version="1.0" ?>
<PsychoPy2experiment encoding="utf-8" version="1.84.2">
  <Settings>
    <Param name="Show mouse" updates="None" val="False" valType="bool"/>
    <Param name="Data filename" updates="None" val="u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])" valType="code"/>
    <Param name="Monitor" updates="None" val="testMonitor" valType="str"/>
    <Param name="Enable Escape" updates="None" val="True" valType="bool"/>
    <Param name="color" updates="None" val="$[0,0,0]" valType="str"/>
    <Param name="Window size (pixels)" updates="None" val="(1024, 768)" valType="code"/>
    <Param name="Full-screen window" updates="None" val="True" valType="bool"/>
    <Param name="colorSpace" updates="None" val="rgb" valType="str"/>
    <Param name="Experiment info" updates="None" val="{'participant':'', 'session':'001'}" valType="code"/>
    <Param name="Save csv file" updates="None" val="False" valType="bool"/>
    <Param name="Show info dlg" updates="None" val="True" valType="bool"/>
    <Param name="Save wide csv file" updates="None" val="True" valType="bool"/>
    <Param name="Save psydat file" updates="None" val="True" valType="bool"/>
    <Param name="expName" updates="None" val="Ambiguity" valType="str"/>
    <Param name="logging level" updates="None" val="exp" valType="code"/>
    <Param name="blendMode" updates="None" val="avg" valType="str"/>
    <Param name="Save excel file" updates="None" val="False" valType="bool"/>
    <Param name="Units" updates="None" val="use prefs" valType="str"/>
    <Param name="Use version" updates="None" val="" valType="str"/>
    <Param name="Save log file" updates="None" val="True" valType="bool"/>
    <Param name="Screen" updates="None" val="1" valType="num"/>
  </Settings>
  <Routines>
    <Routine name="trial">
      <KeyboardComponent name="response">
        <Param name="correctAns" updates="constant" val="" valType="str"/>
        <Param name="storeCorrect" updates="constant" val="False" valType="bool"/>
        <Param name="name" updates="None" val="response" valType="code"/>
        <Param name="stopVal" updates="constant" val="" valType="code"/>
        <Param name="durationEstim" updates="None" val="" valType="code"/>
        <Param name="forceEndRoutine" updates="constant" val="True" valType="bool"/>
        <Param name="startEstim" updates="None" val="" valType="code"/>
        <Param name="discard previous" updates="constant" val="True" valType="bool"/>
        <Param name="startType" updates="None" val="time (s)" valType="str"/>
        <Param name="allowedKeys" updates="constant" val="'y','n','left','right','space'" valType="code"/>
        <Param name="stopType" updates="None" val="duration (s)" valType="str"/>
        <Param name="startVal" updates="None" val="0.0" valType="code"/>
        <Param name="store" updates="constant" val="first key" valType="str"/>
        <Param name="syncScreenRefresh" updates="constant" val="True" valType="bool"/>
      </KeyboardComponent>
      <PolygonComponent name="polygon">
        <Param name="opacity" updates="constant" val="1" valType="code"/>
        <Param name="fillColorSpace" updates="constant" val="rgb" valType="str"/>
        <Param name="name" updates="None" val="polygon" valType="code"/>
        <Param name="fillColor" updates="constant" val="$[255,0,0]" valType="str"/>
        <Param name="stopVal" updates="constant" val="1.0" valType="code"/>
        <Param name="durationEstim" updates="None" val="" valType="code"/>
        <Param name="pos" updates="constant" val="(0, 0)" valType="code"/>
        <Param name="interpolate" updates="constant" val="linear" valType="str"/>
        <Param name="lineWidth" updates="constant" val="1" valType="code"/>
        <Param name="startEstim" updates="None" val="" valType="code"/>
        <Param name="units" updates="None" val="from exp settings" valType="str"/>
        <Param name="startType" updates="None" val="time (s)" valType="str"/>
        <Param name="lineColor" updates="constant" val="$[1,1,1]" valType="str"/>
        <Param name="ori" updates="constant" val="0" valType="code"/>
        <Param name="stopType" updates="None" val="duration (s)" valType="str"/>
        <Param name="startVal" updates="None" val="0.0" valType="code"/>
        <Param name="lineColorSpace" updates="constant" val="rgb" valType="str"/>
        <Param name="nVertices" updates="constant" val="4" valType="int"/>
        <Param name="size" updates="constant" val="(0.2, 0.5)" valType="code"/>
      </PolygonComponent>
    </Routine>
  </Routines>
  <Flow>
    <Routine name="trial"/>
  </Flow>
</PsychoPy2experiment>
